load_file("subiter.hoc")

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  biophys_inhomo()
}

create soma, dend[58]

proc topol() { local i
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend(1)
  connect dend[3](0), soma(0.5)
  for i = 4, 5 connect dend[i](0), dend[3](1)
  for i = 6, 7 connect dend[i](0), dend[5](1)
  for i = 8, 9 connect dend[i](0), dend[i-1](1)
  connect dend[10](0), dend[8](1)
  connect dend[11](0), dend[7](1)
  for i = 12, 13 connect dend[i](0), dend[i-1](1)
  connect dend[14](0), dend[12](1)
  connect dend[15](0), dend[11](1)
  for i = 16, 17 connect dend[i](0), dend[15](1)
  connect dend[18](0), soma(0.5)
  for i = 19, 20 connect dend[i](0), dend[18](1)
  for i = 21, 22 connect dend[i](0), dend[20](1)
  connect dend[23](0), soma(0.5)
  for i = 24, 26 connect dend[i](0), dend[i-1](1)
  connect dend[27](0), dend[25](1)
  connect dend[28](0), dend[24](1)
  for i = 29, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  connect dend[32](0), dend[28](1)
  for i = 33, 34 connect dend[i](0), dend[32](1)
  for i = 35, 36 connect dend[i](0), dend[i-1](1)
  connect dend[37](0), dend[35](1)
  connect dend[38](0), dend[34](1)
  for i = 39, 40 connect dend[i](0), dend[38](1)
  for i = 41, 42 connect dend[i](0), dend[23](1)
  for i = 43, 45 connect dend[i](0), dend[i-1](1)
  connect dend[46](0), dend[44](1)
  connect dend[47](0), dend[46](1)
  connect dend[48](0), dend[43](1)
  for i = 49, 50 connect dend[i](0), dend[i-1](1)
  connect dend[51](0), dend[49](1)
  connect dend[52](0), dend[48](1)
  for i = 53, 54 connect dend[i](0), dend[52](1)
  connect dend[55](0), dend[42](1)
  for i = 56, 57 connect dend[i](0), dend[55](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(371.764, -162.729, -305, 1.15683)
	pt3dadd(372.435, -163.011, -305, 1.86263)
	pt3dadd(373.107, -163.294, -305, 2.90678)
	pt3dadd(373.779, -163.577, -305, 4.00886)
	pt3dadd(374.451, -163.86, -305, 4.96806)
	pt3dadd(375.122, -164.143, -305, 5.85548)
	pt3dadd(375.794, -164.425, -305, 6.91389)
	pt3dadd(376.466, -164.708, -305, 7.65285)
	pt3dadd(377.137, -164.991, -305, 8.22421)
	pt3dadd(377.809, -165.274, -305, 8.65266)
	pt3dadd(378.481, -165.557, -305, 8.88512)
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  }
}
proc shape3d_2() {
  dend[9] {	pt3dadd(555.8, -438.23, -257, 0.84)
  }
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  }
}
proc shape3d_3() {
  dend[19] {	pt3dadd(246.89, -35.03, -312, 0.96)
  }
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  }
}
proc shape3d_4() {
  dend[28] {	pt3dadd(559.5, -208.44, -285, 0.8)
	pt3dadd(560.43, -209.37, -285, 0.8)
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  }
}
proc shape3d_5() {
  dend[37] {	pt3dadd(659.44, -290.95, -276, 0.93)
	pt3dadd(660.24, -291.35, -276, 0.93)
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  }
}
proc shape3d_6() {
  dend[46] {	pt3dadd(543.5, -350.94, -285, 0.96)
	pt3dadd(543.87, -351.48, -285, 0.96)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
}

objref all, somatic, basal, Dendrites, Axon
proc subsets() { local i
  objref all, somatic, basal, Dendrites, Axon
  all = new SectionList()
    soma all.append()
    for i=0, 57 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  basal = new SectionList()
    for i=0, 57 dend[i] basal.append()

  Dendrites = new SectionList()
    for i=0, 17 dend[i] Dendrites.append()
    for i=23, 57 dend[i] Dendrites.append()

  Axon = new SectionList()
    for i=18, 22 dend[i] Axon.append()

}
proc geom() {
  forsec all {  }
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.999)/2)*2 + 1  }
}
proc biophys() {
  forsec somatic {
    Ra = 255
    cm = 0.9
    insert pas
      g_pas = 1.9e-05
      e_pas = -69.7
    insert Ika
      gbar_Ika = 0.07
    insert Nasoma
      gna_Nasoma = 0.07
    insert nap
      gbar_nap = 0.000075
      sh_nap = 0
    insert Ksoma
      gksoma_Ksoma = 0.25
  	insert Cav2_2_0079
  	  gCav2_2bar_Cav2_2_0079 = 0.0001
  	insert Cav2_1_0078
  	  gCav2_1bar_Cav2_1_0078 = 0.0001
  	insert Cav2_3_0082
  	  gCav2_3bar_Cav2_3_0082 = 0.0001
  	insert cat
  	  gbar_cat = 0.0001
  	insert cal
  	  gcalbar_cal = 0.0001
  	insert Ih
  	  gkhbar_Ih	= 0.00001
  }
  forsec Dendrites {
    Ra = 255
    cm = 0.9
    insert pas
      g_pas = 1.9e-05
      e_pas = -69.7
    insert Ika
      gbar_Ika = 0
    insert Ksoma
      gksoma_Ksoma = 0
    insert Nasoma
      gna_Nasoma = 0
  	insert Cav2_2_0079
  	  gCav2_2bar_Cav2_2_0079 = 0
  	insert Cav2_1_0078
  	  gCav2_1bar_Cav2_1_0078 = 0
  	insert Cav2_3_0082
  	  gCav2_3bar_Cav2_3_0082 = 0
  	insert cat
  	  gbar_cat = 0
  	insert cal
  	  gcalbar_cal = 0
  	insert Ih
  	  gkhbar_Ih	= 0
  }
  forsec Axon {
    Ra = 300
    cm = 4
    insert pas
      g_pas = 0.000185
      e_pas = -69.7
  }
}
objref Dendrites_x
proc biophys_inhomo() {
  // Path Length from root with no translation
  //   and no normalization ranges from 0 to 501.122
  Dendrites_x = new SubsetDomainIterator(Dendrites, 0, 0, 0)
  gbar_Ika_Dendrites_x()
  gksoma_Ksoma_Dendrites_x()
  gna_Nasoma_Dendrites_x()
  gCav2_2bar_Cav2_2_0079_Dendrites_x()
  gCav2_1bar_Cav2_1_0078_Dendrites_x()
  gCav2_3bar_Cav2_3_0082_Dendrites_x()
  gbar_cat_Dendrites_x()
  gcalbar_cal_Dendrites_x()
  gkhbar_Ih_Dendrites_x()
}

IKA_VAL = 0.07
IKDRF_VAL = 0.25
INAT_VAL = 0.07
ICAN_VAL = 0.0001
ICAPQ_VAL = 0.0001
ICAR_VAL = 0.0001
ICAT_VAL = 0.0001
ICAL_VAL = 0.0001
IH_VAL = 0.00001
DISTANCE_FROM_SOMA = 75

proc gbar_Ika_Dendrites_x() {local x, p, p0, p1, k
  Dendrites_x.update()
  p0 = Dendrites_x.p0  p1 = Dendrites_x.p1
  // A0 = 0.05
  // A = -0.05
  k = 10
  // d = 55
  for Dendrites_x.loop() {
    x = Dendrites_x.x  p = Dendrites_x.p
    // gbar_Ika(x) = A0 + A/(1 + exp(k*(d - p)))
	gbar_Ika(x) = IKA_VAL - IKA_VAL/(1 + exp(k*(DISTANCE_FROM_SOMA - p)))
  }
}
proc gksoma_Ksoma_Dendrites_x() {local x, p, p0, p1, k
  Dendrites_x.update()
  p0 = Dendrites_x.p0  p1 = Dendrites_x.p1
  // A0 = 0.3
  // A = -0.3
  k = 10
  // d = 55
  for Dendrites_x.loop() {
    x = Dendrites_x.x  p = Dendrites_x.p
    // gksoma_Ksoma(x) = A0 + A/(1 + exp(k*(d - p)))
	gksoma_Ksoma(x) = IKDRF_VAL - IKDRF_VAL/(1 + exp(k*(DISTANCE_FROM_SOMA - p)))
  }
}
proc gna_Nasoma_Dendrites_x() {local x, p, p0, p1, k
  Dendrites_x.update()
  p0 = Dendrites_x.p0  p1 = Dendrites_x.p1
  // A0 = 0.075
  // A = -0.075
  k = 10
  // d = 55
  for Dendrites_x.loop() {
    x = Dendrites_x.x  p = Dendrites_x.p
    // gna_Nasoma(x) = A0 + A/(1 + exp(k*(d - p)))
	gna_Nasoma(x) = INAT_VAL - INAT_VAL/(1 + exp(k*(DISTANCE_FROM_SOMA - p)))
  }
}
proc gCav2_2bar_Cav2_2_0079_Dendrites_x() {local x, p, p0, p1, k
  Dendrites_x.update()
  p0 = Dendrites_x.p0  p1 = Dendrites_x.p1
  // A0 = 0.07
  // A = -0.07
  k = 10
  // d = 55
  for Dendrites_x.loop() {
    x = Dendrites_x.x  p = Dendrites_x.p
    // gna_Nasoma(x) = A0 + A/(1 + exp(k*(d - p)))
	gCav2_2bar_Cav2_2_0079(x) = ICAN_VAL - ICAN_VAL/(1 + exp(k*(DISTANCE_FROM_SOMA - p)))
  }
}
proc gCav2_1bar_Cav2_1_0078_Dendrites_x() {local x, p, p0, p1, k
  Dendrites_x.update()
  p0 = Dendrites_x.p0  p1 = Dendrites_x.p1
  // A0 = 0.07
  // A = -0.07
  k = 10
  // d = 55
  for Dendrites_x.loop() {
    x = Dendrites_x.x  p = Dendrites_x.p
    // gna_Nasoma(x) = A0 + A/(1 + exp(k*(d - p)))
	gCav2_1bar_Cav2_1_0078(x) = ICAPQ_VAL - ICAPQ_VAL/(1 + exp(k*(DISTANCE_FROM_SOMA - p)))
  }
}
proc gCav2_3bar_Cav2_3_0082_Dendrites_x() {local x, p, p0, p1, k
  Dendrites_x.update()
  p0 = Dendrites_x.p0  p1 = Dendrites_x.p1
  // A0 = 0.07
  // A = -0.07
  k = 10
  // d = 55
  for Dendrites_x.loop() {
    x = Dendrites_x.x  p = Dendrites_x.p
    // gna_Nasoma(x) = A0 + A/(1 + exp(k*(d - p)))
	gCav2_3bar_Cav2_3_0082(x) = ICAR_VAL - ICAR_VAL/(1 + exp(k*(DISTANCE_FROM_SOMA - p)))
  }
}
proc gbar_cat_Dendrites_x() {local x, p, p0, p1, k
  Dendrites_x.update()
  p0 = Dendrites_x.p0  p1 = Dendrites_x.p1
  // A0 = 0.07
  // A = -0.07
  k = 10
  // d = 55
  for Dendrites_x.loop() {
    x = Dendrites_x.x  p = Dendrites_x.p
    // gna_Nasoma(x) = A0 + A/(1 + exp(k*(d - p)))
	gbar_cat(x) = ICAT_VAL - ICAT_VAL/(1 + exp(k*(DISTANCE_FROM_SOMA - p)))
  }
}
proc gcalbar_cal_Dendrites_x() {local x, p, p0, p1, k
  Dendrites_x.update()
  p0 = Dendrites_x.p0  p1 = Dendrites_x.p1
  // A0 = 0.07
  // A = -0.07
  k = 10
  // d = 55
  for Dendrites_x.loop() {
    x = Dendrites_x.x  p = Dendrites_x.p
    // gna_Nasoma(x) = A0 + A/(1 + exp(k*(d - p)))
	gcalbar_cal(x) = ICAL_VAL - ICAL_VAL/(1 + exp(k*(DISTANCE_FROM_SOMA - p)))
  }
}
proc gkhbar_Ih_Dendrites_x() {local x, p, p0, p1, k
  Dendrites_x.update()
  p0 = Dendrites_x.p0  p1 = Dendrites_x.p1
  // A0 = 0.07
  // A = -0.07
  k = 10
  // d = 55
  for Dendrites_x.loop() {
    x = Dendrites_x.x  p = Dendrites_x.p
    // gna_Nasoma(x) = A0 + A/(1 + exp(k*(d - p)))
	gkhbar_Ih(x) = IH_VAL - IH_VAL/(1 + exp(k*(DISTANCE_FROM_SOMA - p)))
  }
}
access soma

celldef()
