// This script is used to search the synaptic parameter space of the IS3 model by varying the number of excitatory and inhibitory synapses as well as their presynaptic spike rates

load_file("nrngui.hoc")
load_file("IS3_M2_Case8StarRevised.hoc") // Loads IS3 model with full morphology & properties (as well as parameters and point processes)
		
SRexcsyncount = 0
SLMexcsyncount = 0
inhsyncount = 0
count = 0 // for indexing purposes to do with the input vectors
for (dendn = 0; dendn<=57; dendn = dendn+1){
	print "Section Number: ", dendn_vec.x[dendn]
			
	for (i = 1; i<=dend[dendn].nseg; i = i+1) {
		if (dendn > 17 && dendn < 23) { // Skip putting synapses on axonal segments
			count = count + 1
		 	break
		}
	
		// Specifies proportion along section (i.e. from 0 to 1)
		prop = ((dend[dendn].L/dend[dendn].nseg)*i - (dend[dendn].L/dend[dendn].nseg)/2)/dend[dendn].L // finds the center of each segment, as defined by its proportional distance along each section; (prop = (i-0.5)/dend[dendn].nseg also works)
			
		// Assign optimized synapse parameter values to 9 excitatory synapses on the compartment if in SR
		if (distance(prop)<=300) {
			access dend[dendn]
			for (l = 1; l<=9; l = l + 1){
				SRexcsynapses[SRexcsyncount] = new Exp2Syn(prop)
				dend[dendn] SRexcsynapses[SRexcsyncount].loc(prop) // assign to current compartment
				SRexcsynapses[SRexcsyncount].tau1 = risetime_vec.x[count]
				SRexcsynapses[SRexcsyncount].tau2 = decaytime_vec.x[count]
				SRexcsynapses[SRexcsyncount].e = 0
				SRexcnss[SRexcsyncount] = new VecStim(prop)
				SRexcncs[SRexcsyncount] = new NetCon(SRexcnss[SRexcsyncount], SRexcsynapses[SRexcsyncount])
				SRexcncs[SRexcsyncount].weight = minweight_vec.x[count]
				SRexcsyncount = SRexcsyncount + 1
			}
		}		
		
		// Assign optimized synapse parameter values to 9 excitatory synapses on the compartment if in SLM
		if (distance(prop)>300) { // i.e. if greater than 300 um away from soma
			access dend[dendn]
			for (l = 1; l<=9; l = l + 1){
				SLMexcsynapses[SLMexcsyncount] = new Exp2Syn(prop)
				dend[dendn] SLMexcsynapses[SLMexcsyncount].loc(prop) // assign to current compartment
				SLMexcsynapses[SLMexcsyncount].tau1 = risetime_vec.x[count]
				SLMexcsynapses[SLMexcsyncount].tau2 = decaytime_vec.x[count]
				SLMexcsynapses[SLMexcsyncount].e = 0
				SLMexcnss[SLMexcsyncount] = new VecStim(prop)
				SLMexcncs[SLMexcsyncount] = new NetCon(SLMexcnss[SLMexcsyncount], SLMexcsynapses[SLMexcsyncount])
				SLMexcncs[SLMexcsyncount].weight = minweight_vec.x[count]
				SLMexcsyncount = SLMexcsyncount + 1
			}
		}
		
		// Assign optimized synapse parameter values to 2 inhibitory synapses on the compartment
		for (m = 1; m<=2; m = m + 1){
			inhsynapses[inhsyncount] = new Exp2Syn(prop)
			dend[dendn] inhsynapses[inhsyncount].loc(prop) // assign to current compartment
			inhsynapses[inhsyncount].tau1 = risetimeinh_vec.x[count]
			inhsynapses[inhsyncount].tau2 = decaytimeinh_vec.x[count]
			inhsynapses[inhsyncount].e = -70
			inhnss[inhsyncount] = new VecStim(prop)
			inhncs[inhsyncount] = new NetCon(inhnss[inhsyncount], inhsynapses[inhsyncount])
			inhncs[inhsyncount].weight = minweightinh_vec.x[count]
			inhsyncount = inhsyncount + 1
		}
		count = count + 1		
	}	
}
// Generate randomized indexing for random synapse selection
objref r, randSRexcindex, randSLMexcindex, randinhindex
r = new Random()
randSRexcindex = new Vector(nSRexcsyns)
randSLMexcindex = new Vector(nSLMexcsyns)
randinhindex = new Vector(ninhsyns)
tempindex = 0
repeats = 1 // Initialize at 1 so it does skip the while loop
for (i = 0; i < nSRexcsyns; i = i + 1){
	while (repeats > 0){
		repeats = 0 // Reset the count of repeats to 0 for next iteration
		tempindex = r.discunif(-1, nSRexcsyns-1) // Generate random integer
		for k=0,nSRexcsyns-1 repeats = repeats + (tempindex == randSRexcindex.x[k]) // Check if value repeats (i.e. if repeats > 0)
	}
	randSRexcindex.x[i] = tempindex // Assign value if not repeated
	repeats = 1 // Re-initialize to 1 so it doesn't skip while loop
}
tempindex = 0
repeats = 1 // Initialize at 1 so it does skip the while loop
for (i = 0; i < nSLMexcsyns; i = i + 1){
	while (repeats > 0){
		repeats = 0 // Reset the count of repeats to 0 for next iteration
		tempindex = r.discunif(-1, nSLMexcsyns-1) // Generate random integer
		for k=0,nSLMexcsyns-1 repeats = repeats + (tempindex == randSLMexcindex.x[k]) // Check if value repeats (i.e. if repeats > 0)
	}
	randSLMexcindex.x[i] = tempindex // Assign value if not repeated
	repeats = 1 // Re-initialize to 1 so it doesn't skip while loop
}
tempindex = 0
repeats = 1 // Initialize at 1 so it does skip the while loop
for (i = 0; i < ninhsyns; i = i + 1){
	while (repeats > 0){
		repeats = 0 // Reset the count of repeats to 0 for next iteration
		tempindex = r.discunif(-1, ninhsyns-1) // Generate random integer
		for k=0,ninhsyns-1 repeats = repeats + (tempindex == randinhindex.x[k]) // Check if value repeats (i.e. if repeats > 0)
	}
	randinhindex.x[i] = tempindex // Assign value if not repeated
	repeats = 1 // Re-initialize to 1 so it doesn't skip while loop
}

objectvar frandSRexcindex
sprint(filename2,"model_RandomizedSRExcitatoryIndices.dat")
frandSRexcindex = new File(filename2)
frandSRexcindex.wopen(filename2)
randSRexcindex.printf(frandSRexcindex) // Use printf instead of vwrite if you want a text file instead of a binary file
frandSRexcindex.close()
	
objectvar frandSLMexcindex
sprint(filename6,"model_RandomizedSLMExcitatoryIndices.dat")
frandSLMexcindex = new File(filename6)
frandSLMexcindex.wopen(filename6)
randSLMexcindex.printf(frandSLMexcindex) // Use printf instead of vwrite if you want a text file instead of a binary file
frandSLMexcindex.close()

objectvar frandinhindex
sprint(filename3,"model_RandomizedInhibitoryIndices.dat")
frandinhindex = new File(filename3)
frandinhindex.wopen(filename3)
randinhindex.printf(frandinhindex) // Use printf instead of vwrite if you want a text file instead of a binary file
frandinhindex.close()

// Run Parameter Search
excsyncount = 0 // Starting value
inhsyncount = 0 // Starting value
excsynspikes = 0
initialspikes = 0
inhsynspikes = initialspikes
maxexcSRrate = 30 // According to peak rates from grid pyramidal cells in LIII of Entorhinal Cortex
maxexcSLMrate = 30 // According to peak rates from place cells and time cells in CA3
maxinhrate = 100 // According to peak rates of inhibitory interneurons in CA1
maxexcSRspikes = maxexcSRrate*(tstop/1000) // Max 30 Hz so 30 spikes in 1s
maxexcSLMspikes = maxexcSLMrate*(tstop/1000) // Max 30 Hz so 30 spikes in 1s
maxinhspikes = maxinhrate*(tstop/1000) // Max 100 Hz so 100 spikes in 1s
nexcspikesteps = 3 // Both SR and SLM should have the same number of spike steps in order to work (Note number of spike steps ends up being +1 due to 0Hz start value)
nexcSRspikesteps = nexcspikesteps // Number of spike step increases
nexcSLMspikesteps = nexcspikesteps // Number of spike step increases
ninhspikesteps = 4
excSRspikeresolution = int(maxexcSRspikes/nexcSRspikesteps)
excSLMspikeresolution = int(maxexcSLMspikes/nexcSLMspikesteps)
inhspikeresolution = int(maxinhspikes/ninhspikesteps)
fractofexcsyns = 1
fractofinhsyns = 1
nexcsynsteps = 10
ninhsynsteps = 10
testnexcsyns = nSLMexcsyns*2 // i.e. so SR and SLM syns add 1:1 // nexcsyns/fractofexcsyns // If only adding a fraction of the total number of excitatory synpases
testninhsyns = ninhsyns/fractofinhsyns // If only adding a fraction of the total number of inhibitory synpases
excsynres = int(testnexcsyns/nexcsynsteps)-1 // Resolution of excitatory synapses during parameter search (Note resolution must be an even number - add SR and SLM evenly)
inhsynres = int(testninhsyns/ninhsynsteps) // Resolution of inhibitory synapses during parameter search ()
maxcommoninh = inhsynres // For common scenarios, max 4 since resolution of synapses is 4
maxcommonexc = excsynres/2 // For common scenarios, max 9 since resolution of synapses is 18 (i.e. 9 SR and 9 SLM)
initialnexccommon = excsynres/2 // Starting value 
initialninhcommon = inhsynres // Starting value
access soma

// Record presynaptic events at all synapses. 
// Note that rexcvec & rinhvec values should be the same as excprespiketrains & inhprespiketrains values.
objectvar SRexcprespiketrains[nSRexcsyns], SLMexcprespiketrains[nSLMexcsyns], inhprespiketrains[ninhsyns]
	
for i=0,nSRexcsyns-1 SRexcprespiketrains[i] = new Vector()
for i=0,nSLMexcsyns-1 SLMexcprespiketrains[i] = new Vector()
for i=0,ninhsyns-1 inhprespiketrains[i] = new Vector()
	
for i=0,nSRexcsyns-1 SRexcncs[i].record(SRexcprespiketrains[i])
for i=0,nSLMexcsyns-1 SLMexcncs[i].record(SLMexcprespiketrains[i])
for i=0,ninhsyns-1 inhncs[i].record(inhprespiketrains[i])

// Create random uniform sample for spikes times
objectvar rSRexc, rSRexcvec, rSLMexc, rSLMexcvec, rinh, rinhvec, frecSRExcPreSpikeTrains, frecSLMExcPreSpikeTrains, frecInhPreSpikeTrains, rSRexcMat, rSLMexcMat, rinhMat
rSRexc = new Random(1)
rSRexc.uniform(0,tstop)
rSLMexc = new Random(2)
rSLMexc.uniform(0,tstop)
rinh = new Random(3)
rinh.uniform(0,tstop)

count = 0
for (inhsyncount = inhsynres-1; inhsyncount < testninhsyns; inhsyncount = inhsyncount + inhsynres){
	for (excsyncount = excsynres-1; excsyncount < testnexcsyns; excsyncount = excsyncount + excsynres){
		for (inhsynspikes = initialspikes; inhsynspikes <= maxinhspikes; inhsynspikes = inhsynspikes + inhspikeresolution){
			for (excsynspikes = 0; excsynspikes <= nexcspikesteps; excsynspikes = excsynspikes + 1){
				for (ninhcommon = initialninhcommon; ninhcommon <= maxcommoninh; ninhcommon = ninhcommon*sqrt(maxcommoninh)+50){ // Only need 1 value
					for (nexccommon = initialnexccommon; nexccommon <= maxcommonexc; nexccommon = nexccommon*sqrt(maxcommonexc)+50){ // Only need 1 value
						count = count + 1
					}
				}
			}
		}
	}
}

// Paramter Matrix
objref ParamMat
ParamMat = new Matrix(7, count)
count = 0
// Parameter Search Function
for (inhsyncount = inhsynres-1; inhsyncount < testninhsyns; inhsyncount = inhsyncount + inhsynres){
	for (excsyncount = excsynres-1; excsyncount < testnexcsyns; excsyncount = excsyncount + excsynres){
		for (inhsynspikes = initialspikes; inhsynspikes <= maxinhspikes; inhsynspikes = inhsynspikes + inhspikeresolution){
			for (excsynspikes = 0; excsynspikes <= nexcspikesteps; excsynspikes = excsynspikes + 1){
				
				excSRsynspikes = excsynspikes*excSRspikeresolution
				excSLMsynspikes = excsynspikes*excSLMspikeresolution
	
				for (ninhcommon = initialninhcommon; ninhcommon <= maxcommoninh; ninhcommon = ninhcommon*sqrt(maxcommoninh)+50){ // max 9 common inhibitory inputs
					for (nexccommon = initialnexccommon; nexccommon <= maxcommonexc; nexccommon = nexccommon*sqrt(maxcommonexc)+50){ // max 16 common excitatory inputs
			
						// Set up parameter matrix
						ParamMat.x[0][count] = inhsyncount
						ParamMat.x[1][count] = excsyncount
						ParamMat.x[2][count] = inhsynspikes
						ParamMat.x[3][count] = excSRsynspikes
						ParamMat.x[4][count] = excSLMsynspikes
						ParamMat.x[5][count] = nexccommon
						ParamMat.x[6][count] = ninhcommon
						count = count + 1
					}
				}
			}
		}
	}
}
proc f() {

	inhsyncount = ParamMat.x[0][$1]
	excsyncount = ParamMat.x[1][$1]
	inhsynspikes = ParamMat.x[2][$1]
	excSRsynspikes = ParamMat.x[3][$1]
	excSLMsynspikes = ParamMat.x[4][$1]
	nexccommon = ParamMat.x[5][$1]
	ninhcommon = ParamMat.x[6][$1]

	// Re-initialize all inhibitory synapses such that they are silent when starting a new iteration
	rinhvec = new Vector(0)
	for i=0,testninhsyns-1 inhnss[randinhindex.x[i]].play(rinhvec)
	
	// Re-initialize all excitatory synapses such that they are silent when starting a new iteration
	rSRexcvec = new Vector(0)
	for i=0,nSRexcsyns-1 SRexcnss[randSRexcindex.x[i]].play(rSRexcvec)
	rSLMexcvec = new Vector(0)
	for i=0,nSLMexcsyns-1 SLMexcnss[randSLMexcindex.x[i]].play(rSLMexcvec)
	
	// Assign excitatory spike times
	if (excSRsynspikes > 0 && excSLMsynspikes > 0) {
		rSRexcMat = new Matrix(int((excsyncount+1)/2),excSRsynspikes)
		rSLMexcMat = new Matrix(int((excsyncount+1)/2),excSLMsynspikes)
		for (i=0; i < int((excsyncount+1)/2); i = i + 1){ // On each iteration add 1 SR and 1 SLM excitatory synapse
	
			// Sample new spike times for common inputs
			rSRexcvec = new Vector(excSRsynspikes)
			rSRexcvec.setrand(rSRexc)
			rSRexcvec.sort()
			rSLMexcvec = new Vector(excSLMsynspikes)
			rSLMexcvec.setrand(rSLMexc)
			rSLMexcvec.sort()

			xcom = 1
			// Common input loop where synapses are given the same input until the maximum number of common inputs is passed
			while (xcom <= nexccommon && i <= int((excsyncount+1)/2) && i < nSLMexcsyns && i < nSRexcsyns) {
		
				// Add SR excitatory inputs
				SRexcnss[randSRexcindex.x[i]].play(rSRexcvec)
				for k=0,excSRsynspikes-1 rSRexcMat.x[i][k] = rSRexcvec.x[k]
		
				// Add SLM excitatory inputs and if out of SLM synapses add SR inputs intead
				SLMexcnss[randSLMexcindex.x[i]].play(rSLMexcvec)
				for k=0,excSLMsynspikes-1 rSLMexcMat.x[i][k] = rSLMexcvec.x[k]
	
				i = i + 1 // update indexing
				xcom = xcom + 1
			}
			i = i - 1 // i.e. so that i does not get updated twice resulting in skipped synapses
		}
	}

	// Assign inhibitory spike times
	if (inhsynspikes > 0){
		rinhMat = new Matrix(inhsyncount+1,inhsynspikes)
		for (i=0; i < inhsyncount+1; i = i + 1){ 
			rinhvec = new Vector(inhsynspikes)
			rinhvec.setrand(rinh) 
			rinhvec.sort()

			xcom = 1
			while (xcom <= ninhcommon && i <= inhsyncount) {
				inhnss[randinhindex.x[i]].play(rinhvec)
				// Build Spike Time Matrix
				for k=0,inhsynspikes-1 rinhMat.x[i][k] = rinhvec.x[k]

				i = i + 1
				xcom = xcom + 1
			}
			i = i - 1 // i.e. so that i does not get updated twice resulting in skipped synapses
		}
	}

	// Run Simulation and Record Vm Vector
	recV = new Vector()
	recV.record(&soma.v(0.5))
	run()		
}
